PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = 2back
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Routines
  Routine instruction
    TextComponent instuction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        please recognize if the present stimuli is as same as the one 2 trials before
        if yes, press "z" button
        if no, press "x" button
        please do response quickly and accurately

        press "space" to start
    KeyboardComponent startkey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent final
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The experiment is done
        Please wait to the conductor
    KeyboardComponent leavekey
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine ISI
    TextComponent rest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine target
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        stimulus_list = []
      Begin Routine:
        import random, string
        target = random.sample(string.ascii_uppercase,1)[0]
      End Routine:
        stimulus_list.append(target[0])
        thisExp.addData('target', target)
    TextComponent fixation1_target
      letterHeight = 0.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
      text = +
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    TextComponent target_1
      letterHeight = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $target
    TextComponent ISI_target
      letterHeight = 0.5
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.3
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  Routine routine_2_back
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        i = 2

        import random

        TypeControl_list = ['0']*128 + ['1']*32 # 0 is nontarget; 1 is target
        random.shuffle(TypeControl_list)
      Begin Routine:
        import random, string

        if TypeControl_list[i-2] == '1' : #target
            stimulus = stimulus_list[i-2]
            corResponse = 'z'
            i += 1
            stimulus_list.append(stimulus)
        elif TypeControl_list[i-2] == '0' : #nontarget
            stimulus = random.sample([l for l in string.ascii_uppercase if l not in stimulus_list[i-2]], 1)[0]
            corResponse = 'x'
            i += 1
            stimulus_list.append(stimulus)
      End Routine:
        thisExp.addData('stimulus', stimulus)


        if TypeControl_list[0] == '1' : #target
           IsTwoBack = 1
           thisExp.addData('IsTwoBack', IsTwoBack)
        elif TypeControl_list[0] == '0' : #nontarget
           IsTwoBack = 0
           thisExp.addData('IsTwoBack', IsTwoBack)
    TextComponent fixation
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    TextComponent question
      letterHeight = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
      text [set every repeat] = $stimulus
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    KeyboardComponent response
      allowedKeys = 'z','x'
      correctAns = $corResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 3.5
      store = first key
      storeCorrect = True
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  Routine trigger_control
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        stimulus = []
        corResponse = []
      Begin Routine:
        import random, string

        control_list = '0'*8 + '1'*2 # 0 is nontarget; 1 is target
        TypeControl = random.sample(control_list,1)

        if TypeControl[0] == '0' : #nontarget
            stimulus = random.sample([l for l in string.ascii_uppercase if l not in stimulus_list[i-2]], 1)
            corResponse = '/'
            i += 1
            stimulus_list.append(stimulus)
        elif TypeControl[0] == '1' : #target
            stimulus = stimulus_list[i-2]
            corResponse = 'z'
            i += 1
            stimulus_list.append(stimulus)
  Routine target_control
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        target1 = []
        target2 = []
        stimulus_list = []
        i = 1
      Begin Routine:
        import random, string
        target_control = random.sample(string.ascii_uppercase,2)
        target1 = target_control[0]
        target2 = target_control[1]

        stimulus_list.append(target1[0])
        stimulus_list.append(target2[0])
  Routine block_rest
    TextComponent block_rest_control
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        take a break
        press "space" to start next block
    KeyboardComponent block_rest_control_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  LoopInitiator blockloop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator target_loop loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine target
    LoopTerminator target_loop
    LoopInitiator twoback_loop loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine routine_2_back
      Routine ISI
    LoopTerminator twoback_loop
    Routine block_rest
  LoopTerminator blockloop
  Routine end
