PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = nback
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Routines
  Routine instruction
    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        blockloop_N = 0
      Begin Routine:
        if blockloop_N == 0:
            instructionTXT = 'this is zero back'
            target_n = 0
        elif blockloop_N == 1:
            instructionTXT = 'this is one back'
            target_n = 1
        elif blockloop_N == 2:
            instruction = 'this is two back'
            target_n = 2
    TextComponent instuction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        please recognize if the present stimuli is as same as the one 2 trials before
        if yes, press "z" button
        if no, press "x" button
        please do response quickly and accurately

        press "space" to start
    KeyboardComponent startkey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent final
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The experiment is done
        Please wait to the conductor
    KeyboardComponent leavekey
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine ISI
    TextComponent rest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine target
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        stimulus_list = []
        target_n = 0

        i =0 #stimulus index
      Begin Routine:
        import random, string

        if blockloop_N == 0:
            target_n = 0
        elif blockloop_N == 1:
            target_n = 1
            target = random.sample(string.ascii_uppercase,1)[0]
        elif blockloop_N == 2:
            target_n = 2
            target = random.sample(string.ascii_uppercase,1)[0]
      End Routine:
        stimulus_list.append(target[0])
        thisExp.addData('target', target)

        i += 1
    TextComponent fixation1_target
      letterHeight = 0.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
      text = +
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    TextComponent target_1
      letterHeight = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $target
    TextComponent ISI_target
      letterHeight = 0.5
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.3
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  Routine trigger_control
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        stimulus = []
        corResponse = []
      Begin Routine:
        import random, string

        control_list = '0'*8 + '1'*2 # 0 is nontarget; 1 is target
        TypeControl = random.sample(control_list,1)

        if TypeControl[0] == '0' : #nontarget
            stimulus = random.sample([l for l in string.ascii_uppercase if l not in stimulus_list[i-2]], 1)
            corResponse = '/'
            i += 1
            stimulus_list.append(stimulus)
        elif TypeControl[0] == '1' : #target
            stimulus = stimulus_list[i-2]
            corResponse = 'z'
            i += 1
            stimulus_list.append(stimulus)
  Routine target_control
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        target1 = []
        target2 = []
        stimulus_list = []
        i = 1
      Begin Routine:
        import random, string
        target_control = random.sample(string.ascii_uppercase,2)
        target1 = target_control[0]
        target2 = target_control[1]

        stimulus_list.append(target1[0])
        stimulus_list.append(target2[0])
  Routine block_rest
    TextComponent block_rest_control
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        take a break
        press "space" to start next block
    KeyboardComponent block_rest_control_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_6
      Code Type = Py
      End Routine:
        blockloop_N += 1
  Routine n_back
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        import random

        zeroback_index = 0
        oneback_index = 0
        twoback_index = 0

        zeroback_TypeControl_list = ['0']*128 + ['1']*32 # 0 is nontarget; 1 is target
        random.shuffle(zeroback_TypeControl_list)

        oneback_TypeControl_list = ['0']*128 + ['1']*32 # 0 is nontarget; 1 is target
        random.shuffle(oneback_TypeControl_list)

        twoback_TypeControl_list = ['0']*128 + ['1']*32 # 0 is nontarget; 1 is target
        random.shuffle(twoback_TypeControl_list)
      Begin Routine:
        import random, string

        if blockloop_N == 0:
            if zeroback_TypeControl_list[zeroback_index] == '1' : #target
                stimulus = 'X'
                corResponse = 'z'
                i += 1
                stimulus_list.append(stimulus)
            elif zeroback_TypeControl_list[zeroback_index] == '0' : #nontarget
                stimulus = random.sample([l for l in string.ascii_uppercase if l not in ['X']],1)[0]
                corResponse = 'x'
                i += 1
                stimulus_list.append(stimulus)
            condition = 'zero_Back'
        elif blockloop_N == 1:
            if oneback_TypeControl_list[oneback_index] == '1' : #target
                stimulus = stimulus_list[i-1]
                corResponse = 'z'
                i += 1
                stimulus_list.append(stimulus)
            elif oneback_TypeControl_list[oneback_index] == '0' : #nontarget
                stimulus = random.sample([l for l in string.ascii_uppercase if l not in stimulus_list[i-1]], 1)[0]
                corResponse = 'x'
                i += 1
                stimulus_list.append(stimulus)
            condition = 'one_back'
        elif blockloop_N == 2:
            if twoback_TypeControl_list[twoback_index] == '1' : #target
                stimulus = stimulus_list[i-2]
                corResponse = 'z'
                i += 1
                stimulus_list.append(stimulus)
            elif twoback_TypeControl_list[twoback_index] == '0' : #nontarget
                stimulus = random.sample([l for l in string.ascii_uppercase if l not in stimulus_list[i-2]], 1)[0]
                corResponse = 'x'
                i += 1
                stimulus_list.append(stimulus)
            condition = 'two_back'
      End Routine:
        thisExp.addData('stimulus', stimulus)

        if blockloop_N == 0:
           oneback_index += 1
           if zeroback_TypeControl_list[0] == '1' : #target
              Is_nBack = 1
              thisExp.addData('Is_nBack', Is_nBack)
           elif zeroback_TypeControl_list[0] == '0' : #nontarget
              Is_nBack = 0
              thisExp.addData('Is_nBack', Is_nBack)
        elif blockloop_N == 1:
           oneback_index += 1
           if oneback_TypeControl_list[0] == '1' : #target
              Is_nBack = 1
              thisExp.addData('Is_nBack', Is_nBack)
           elif oneback_TypeControl_list[0] == '0' : #nontarget
              Is_nBack = 0
              thisExp.addData('Is_nBack', Is_nBack)
        elif blockloop_N == 2:
           twoback_index += 1
           if twoback_TypeControl_list[0] == '1' : #target
              Is_nBack = 1
              thisExp.addData('Is_nBack', Is_nBack)
           elif twoback_TypeControl_list[0] == '0' : #nontarget
              Is_nBack = 0
              thisExp.addData('Is_nBack', Is_nBack)

        thisExp.addData('condition', condition)
    TextComponent fixation
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    TextComponent question
      letterHeight = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
      text [set every repeat] = $stimulus
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    KeyboardComponent response
      allowedKeys = 'z','x'
      correctAns = $corResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 3.5
      store = first key
      storeCorrect = True
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Flow
  LoopInitiator blockloop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine instruction
    LoopInitiator target_loop loopType="TrialHandler"
      loopType = random
      nReps = target_n
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      Routine target
    LoopTerminator target_loop
    LoopInitiator nback_loop loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine n_back
      Routine ISI
    LoopTerminator nback_loop
    Routine block_rest
  LoopTerminator blockloop
  Routine end
