PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = test
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $aa
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = a.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('aa', 'a')]),
      OrderedDict([('aa', 'b')]),
      OrderedDict([('aa', 'c')]),
      OrderedDict([('aa', 's')]),
      OrderedDict([('aa', 'f')])]
    Routine trial
  LoopTerminator trials
